PsychoPy2experiment version="1.90.1"
Settings
  Monitor = HumlabMon
  color = $[0.506,0.506,0.506]
  Experiment info = {u'Participant': u''}
  Units = deg
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['Participant'], expInfo['date'])
  expName = antisaccade_builder_et
  logging level = warning
  Screen = 1
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Routines
  Routine fix_cross
    GratingComponent fix_target
      opacity = .7
      tex = sin
      color = $[-1,-1,-1]
      stopVal [duration (s)] = 1
      mask = circle
      units = pix
      startVal [time (s)] = 0
      sf = 40
      size = [16,16]
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  Routine image
    CodeComponent code
      Begin Experiment:
        import os

        # Insert the parent directory (where SMITE is) to path
        curdir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(curdir)
        sys.path.insert(0,os.path.dirname(curdir))

        import SMITE
        import helpers


        #eye_tracker_name = 'REDn_Professional'
        eye_tracker_name = 'REDm'
        settings = SMITE.get_defaults(eye_tracker_name)
        tracker = SMITE.Connect(settings)
        tracker.init()

        tracker.calibrate(win)

        tracker.start_recording()
      Begin Routine:
        tracker.send_message(str(image_name))
      End Routine:
        tracker.send_message('stop.jpg')
      End Experiment:
        # Save data and disconnect
        tracker.stop_recording()

        print('Data saved to '+_thisDir + os.sep + expInfo['Participant'] + '.idf')
        tracker.save_data(_thisDir + os.sep + expInfo['Participant'] + '.idf')
        tracker.de_init()
    ImageComponent image_2
      stopVal [duration (s)] = 3.0
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_name
      size = (2, 2)
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  Routine instruct
    TextComponent instrText
      wrapWidth = 800
      color = $[1, 1, 1]
      units = pix
      startVal [time (s)] = 0
      letterHeight = 50
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      text:
        Look at the images

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 50
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      text:
        This is the end of the experiment.

        Thanks!
  Routine blank
    TextComponent text
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_names.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [OrderedDict([('image_name', u'1.jpg')]),
      OrderedDict([('image_name', u'2.jpg')]),
      OrderedDict([('image_name', u'3.jpg')])]
    Routine fix_cross
    Routine image
  LoopTerminator trials
  Routine thanks
