PsychoPy2experiment version="2023.2.0"
Settings
  Audio lib = ptb
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['Participant'], expInfo['date'])
  Experiment info = {u'Participant': u''}
  Full-screen window = True
  Monitor = HumlabMon
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  color = $[0.506,0.506,0.506]
  expName = antisaccade_builder_et
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine fix_cross
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    GratingComponent fix_target
      color = $[-1,-1,-1]
      mask = circle
      opacity = .7
      sf = 40
      size = [16,16]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      tex = sin
      units = pix
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  Routine image
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import os

        # Insert the parent directory (where SMITE is) to path
        curdir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(curdir)
        sys.path.insert(0,os.path.dirname(curdir))

        import from py_smite import SMITE
        import helpers


        #eye_tracker_name = 'REDn_Professional'
        eye_tracker_name = 'REDm'
        settings = SMITE.get_defaults(eye_tracker_name)
        tracker = SMITE.Connect(settings)
        tracker.init()

        tracker.calibrate(win)

        tracker.start_recording()
      Begin Routine:
        tracker.send_message(str(image_name))
      End Experiment:
        # Save data and disconnect
        tracker.stop_recording()

        print('Data saved to '+_thisDir + os.sep + expInfo['Participant'] + '.idf')
        tracker.save_data(_thisDir + os.sep + expInfo['Participant'] + '.idf')
        tracker.de_init()
      End Routine:
        tracker.send_message('stop.jpg')
    ImageComponent image_2
      image [set every repeat] = $image_name
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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  Routine instruct
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    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 50
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 800
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      text:
        Look at the images

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
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    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
      wrapWidth = 800
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      text:
        This is the end of the experiment.

        Thanks!
  Routine blank
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_names.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_name', '1.jpg')]),
      OrderedDict([('image_name', '2.jpg')]),
      OrderedDict([('image_name', '3.jpg')])]
    Routine fix_cross
    Routine image
  LoopTerminator trials
  Routine thanks
